; Parameterized HALF-IMS SIMION GEM file

; Import the electrodes functions necessary to generate geometries
simion.import("geometry.lua")

; Cascades to determine geometries, paper indicates 220 long-short electrode pairs
# numElectrodePairs = get_electrode_pair_count()

# -- dx is the axial x-offset in grid units.
; Set scaling of PA to 1 um per grid unit
; which will essentially minimize the electrode height
; to one grid unit, but attempting to use the ideal parameter
; of 5 nm causes SIMION to complain about system memory. 
# local dx = get_grid_x_spacing()
# local dy = get_grid_y_spacing()
# local dz = get_grid_z_spacing()

; Should equate to 15/40 nm per paper, set in grid units
# local electrodeHeight = get_electrode_height()

; Spacing to give before electrodes start, set in grid units
# local flowChannelOffset = get_flow_channel_offset()

; Define parameters for the shutter/gate electrodes
# local shutterElectrodeCount = get_shutter_electrode_count()

; Unclear what this should be per the paper, but set in grid units
;# local shutterElectrodeLength = (10E-5)/dx
# local shutterElectrodeLength =  get_shutter_electrode_length()

; Unclear what this should be per the paper, but set in grid units
# local shutterElectrodeSpacing = get_shutter_electrode_spacing()

; Total shutter gate grid units
# local shutterElectrodePattern = shutterElectrodeLength + shutterElectrodeSpacing + flowChannelOffset

; Define parameters for the long and short electrodes which make up the HALF-IMS channel
; Should equate to 10 um per paper, but set in grid units
;# local electrodeSpacing = (10E-6)/dx
# local electrodeSpacing = get_electrode_spacing()

; Should equate to 10 um per paper, but set in grid units
;# local electrodeLengthShort = (10E-6)/dx
# local electrodeLengthShort = get_short_electrode_length()

; Should equate to 50 um per paper, but set in grid units
# local electrodeLengthLong = get_long_electrode_length()

; The electrode pattern to lay down for every pair number
# local electrodePattern = 2*electrodeSpacing + electrodeLengthShort + electrodeLengthLong

; Define parameters for the bias ring and detector pad
; Unclear what this should be per paper, but set in grid units
# local biasRingLength =  get_bias_ring_length()

; Unclear what this should be per paper, but set in grid units
# local biasRingSpacing = get_bias_ring_spacing()

; Unclear what this should be per paper, but set in grid units
# local detectorPadLength = get_detector_pad_length()

; Unclear what this should be per paper, but set in grid units
# local detectorPadSpacing = get_detector_pad_spacing()

; Unclear what this should be per paper, but set in grid units
# local detectorPatternSpacing = biasRingLength + biasRingSpacing + detectorPadLength + detectorPadSpacing

# local xPoints = get_device_x_length()
# local yPoints = get_device_y_length()
# local zPoints = get_device_z_length()

; Create a grid scaled to dx value
pa_define(xPoints+1,yPoints+1,zPoints+1, planar, none, electrostatic,,dx,dy,dz)

; Create all geometries scaled to dx value
locate (0,0,0,dx,dy,dz){

    ; Generate the shutter electrodes
    electrode(1) { fill { within { corner_box(flowChannelOffset, 0, shutterElectrodeLength, electrodeHeight) } } }
    electrode(2) { fill { within { corner_box(flowChannelOffset, yPoints-electrodeHeight, shutterElectrodeLength, electrodeHeight) } } }

    ; Loop to generate the electrodes along the channel using a row-major format for the electrode potential so that they
    ; are generated individually
    for i=0,(numElectrodePairs-1) do
	    electrode(4*i+1+shutterElectrodeCount) { fill { within { corner_box(i*electrodePattern + shutterElectrodePattern,0, electrodeLengthShort,electrodeHeight) } } }
	    electrode(4*i+2+shutterElectrodeCount) { fill { within { corner_box(i*electrodePattern + shutterElectrodePattern,yPoints-electrodeHeight, electrodeLengthShort,electrodeHeight) } } }
	    electrode(4*i+3+shutterElectrodeCount) { fill { within { corner_box(i*electrodePattern+electrodeLengthShort+electrodeSpacing + shutterElectrodePattern ,0, electrodeLengthLong,electrodeHeight) } } }
	    electrode(4*i+4+shutterElectrodeCount) { fill { within { corner_box(i*electrodePattern+electrodeLengthShort+electrodeSpacing + shutterElectrodePattern,yPoints-electrodeHeight, electrodeLengthLong,electrodeHeight) } } }
    end

    ; Calculate the total number of electrodes to offset final electrodes
    # local totalElectrodes = 4*(numElectrodePairs-1)+4+shutterElectrodeCount
    # local totalElectrodeOffset = (numElectrodePairs-1)*electrodePattern + shutterElectrodePattern + electrodePattern

    ; Generate the bias ring electrodes
    electrode(totalElectrodes + 1) { fill { within { corner_box( totalElectrodeOffset + biasRingSpacing, 0, biasRingLength, electrodeHeight) } } }
    electrode(totalElectrodes + 2) { fill { within { corner_box( totalElectrodeOffset + biasRingSpacing, yPoints-electrodeHeight, biasRingLength, electrodeHeight) } } }

    ; Generate detector pad electrodes
    electrode(totalElectrodes + 3) { fill { within { corner_box( totalElectrodeOffset + biasRingSpacing + biasRingLength + detectorPadSpacing, 0, detectorPadLength, electrodeHeight) } } }
    electrode(totalElectrodes + 4) { fill { within { corner_box( totalElectrodeOffset + biasRingSpacing + biasRingLength + detectorPadSpacing, yPoints-electrodeHeight, detectorPadLength, electrodeHeight) } } }

}